---
API: 3
OpenSesame: 4.1.14
Platform: nt
---
set width 1280
set uniform_coordinates yes
set title "Go No-Go Task (SART)"
set subject_parity even
set subject_nr 0
set start task
set sound_sample_size -16
set sound_freq 48000
set sound_channels 2
set sound_buf_size 1024
set sampler_backend legacy
set round_decimals 2
set mouse_backend osweb
set keyboard_backend osweb
set jatos_uuid "0136142b-6c52-2775-30b0-093beac5ddde"
set height 720
set fullscreen no
set form_clicks no
set foreground black
set font_underline no
set font_size 20
set font_italic False
set font_family mono
set font_bold False
set experiment_path "G:\\Meu Drive\\Projeto BRANIAC\\Bateria Neuropsicológica Computadorizada Avançada Resumida (BNCA -R)\\Testes\\GoNogo Task (SART)"
set disable_garbage_collection False
set description "The main experiment item"
set coordinates uniform
set compensation 0
set color_backend osweb
set clock_backend osweb
set canvas_backend osweb
set bidi no
set background white

define sequence Block_sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructions_Training_Condition True
	run Trial_Loop_Training_Condition_Phase True

define sequence Block_sequence_1
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Instructions_Task_Condition True
	run Trial_Loop_Task_Phase True

define form_text_display End_of_Task
	set timeout infinite
	set spacing 10
	set rows "1;8;1"
	set only_render no
	set ok_text Finalizar
	set margins "40;40;40;40"
	set form_title "<span size=24><b>Teste Concluído</b></span>"
	__form_text__
	<b>Parabéns, você chegou ao fim da tarefa!</b>
	
	Todos os seus dados e tempos de reação foram gravados com sucesso pelo sistema. 
	
	Muito obrigado pela sua atenção, foco e participação.
	
	Clique no botão abaixo para encerrar o aplicativo de testes.
	__end__
	set description "A simple text display form"
	set cols "1;2;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display End_of_Training
	set timeout infinite
	set spacing 10
	set rows "1;14;1"
	set only_render no
	set ok_text "Iniciar Intervalo"
	set margins "30;40;30;40"
	set form_title "<span size=24><b>Fim do Treino</b></span>"
	__form_text__
	<b>O treino terminou com sucesso!</b>
	
	O teste real começará em breve e as regras são exatamente as mesmas:
	
	• <b>Números normais:</b> CLIQUE com o BOTÃO ESQUERDO do mouse o mais rápido possível.
	
	• <b>Número 3:</b> NÃO CLIQUE com o mouse (segure o impulso).
	
	Lembre-se de que o cursor do mouse <b>continuará sem aparecer na tela</b>, mas você pode clicar em qualquer lugar com o BOTÃO ESQUERDO do mouse.
	
	Antes de começar, você terá <b>30 segundos de intervalo</b> para descansar os olhos. Clique abaixo para iniciar o descanso.
	__end__
	set description "A simple text display form"
	set cols "1;2;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define form_text_display Instructions
	set timeout infinite
	set spacing 10
	set rows "1;8;1"
	set only_render no
	set ok_text "Iniciar Treino"
	set margins "40;40;40;40"
	set form_title "<span size=24><b>Instruções Gerais</b></span>"
	__form_text__
	<b>Tarefa de Atenção Sustentada (SART)</b>
	
	Nesta tarefa, números de <b>1 a 9</b> vão piscar um por um no centro da tela. 
	Seu objetivo é responder o mais rápido possível, seguindo apenas duas regras:
	
	• <b>Se aparecer 1, 2, 4, 5, 6, 7, 8 ou 9:</b> CLIQUE com o BOTÃO ESQUERDO do mouse o mais rápido que puder.
	
	• <b>Se aparecer o número 3:</b> NÃO CLIQUE com o mouse. Segure o impulso e espere o número sumir.
	
	O cursor do mouse <b>não aparecerá na tela</b>, mas você pode clicar em qualquer lugar com o BOTÃO ESQUERDO do mouse. Tente ser rápido e preciso! Começaremos agora com um breve <b>TREINO</b>.
	__end__
	set description "A simple text display form"
	set cols "1;2;1"
	set _theme gray
	widget 0 0 3 1 label text="[form_title]"
	widget 0 1 3 1 label center=no text="[form_text]"
	widget 1 2 1 1 button text="[ok_text]"


define sketchpad Instructions_Task_Condition
	set duration 3000
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=22 html=yes show_if=always text="" x=0 y=0 z_index=0
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=True text="O teste começará em breve. Prepare-se!" x=0 y=0 z_index=0

define sketchpad Instructions_Training_Condition
	set duration 3000
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=always text="Faremos um breve treinamento. Aguarde!<br />" x=0 y=0 z_index=0

define sketchpad Pause_1
	set duration 1500
	set description "Displays stimuli"
	draw textline center=1 color=black font_bold=no font_family=mono font_italic=no font_size=50 html=yes show_if=True text="Aguarde o Início do Teste!" x=0 y=0 z_index=0

define loop Task_Loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 practice no
	setcycle 0 condition "[condition1]"
	run Block_sequence_1

define loop Task_Loop_with_Pause
	set source_file ""
	set source table
	set repeat 1
	set order random
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 Experimental_Loop_PLUS_Pause ""
	run Task_PLUS_Pause_Sequence

define sequence Task_PLUS_Pause_Sequence
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run Pause_1 always
	run Task_Loop always
	run End_of_Task always

define loop Training_Loop
	set source_file ""
	set source table
	set repeat 1
	set order sequential
	set description "Repeatedly runs another item"
	set cycles 1
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 practice yes
	setcycle 0 condition "[condition1]"
	run Block_sequence

define loop Trial_Loop_Task_Phase
	set source_file ""
	set source table
	set repeat 15
	set order random
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 number 1
	setcycle 0 correct_response left_button
	setcycle 0 condition go
	setcycle 1 number 2
	setcycle 1 correct_response left_button
	setcycle 1 condition go
	setcycle 2 number 3
	setcycle 2 correct_response timeout
	setcycle 2 condition nogo
	setcycle 3 number 4
	setcycle 3 correct_response left_button
	setcycle 3 condition go
	setcycle 4 number 5
	setcycle 4 correct_response left_button
	setcycle 4 condition go
	setcycle 5 number 6
	setcycle 5 correct_response left_button
	setcycle 5 condition go
	setcycle 6 number 7
	setcycle 6 correct_response left_button
	setcycle 6 condition go
	setcycle 7 number 8
	setcycle 7 correct_response left_button
	setcycle 7 condition go
	setcycle 8 number 9
	setcycle 8 correct_response left_button
	setcycle 8 condition go
	run Trial_sequence_Task

define loop Trial_Loop_Training_Condition_Phase
	set source_file ""
	set source table
	set repeat 2
	set order random
	set description "Repeatedly runs another item"
	set cycles 9
	set continuous no
	set break_if_on_first yes
	set break_if False
	setcycle 0 number 1
	setcycle 0 correct_response left_button
	setcycle 0 condition go
	setcycle 1 number 2
	setcycle 1 correct_response left_button
	setcycle 1 condition go
	setcycle 2 number 3
	setcycle 2 correct_response timeout
	setcycle 2 condition nogo
	setcycle 3 number 4
	setcycle 3 correct_response left_button
	setcycle 3 condition go
	setcycle 4 number 5
	setcycle 4 correct_response left_button
	setcycle 4 condition go
	setcycle 5 number 6
	setcycle 5 correct_response left_button
	setcycle 5 condition go
	setcycle 6 number 7
	setcycle 6 correct_response left_button
	setcycle 6 condition go
	setcycle 7 number 8
	setcycle 7 correct_response left_button
	setcycle 7 condition go
	setcycle 8 number 9
	setcycle 8 correct_response left_button
	setcycle 8 condition go
	run Trial_sequence_Training

define sequence Trial_sequence_Task
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run jitter_task_js True
	run mask_task_sketchpad True
	run sart_response_start_task_js True
	run Trial_sequence_Task_sketchpad True
	run response_window_task_sketchpad True
	run sart_response_finalize_task_js True
	run Trial_sequence_Task_logger True

define logger Trial_sequence_Task_logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad Trial_sequence_Task_sketchpad
	set duration 250
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=150 html=yes show_if=True text="[number]" x=0 y=0 z_index=0

define sequence Trial_sequence_Training
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run jitter_training_js True
	run mask_training_sketchpad True
	run sart_response_start_training_js True
	run Trial_sequence_training_sketchpad True
	run response_window_training_sketchpad True
	run sart_response_finalize_training_js True
	run Trial_sequence_training_logger True

define logger Trial_sequence_training_logger
	set description "Logs experimental data"
	set auto_log yes

define sketchpad Trial_sequence_training_sketchpad
	set duration 250
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=150 html=yes show_if=True text="[number]" x=0 y=0 z_index=0

define inline_javascript config_viewport_inline_javascript
	set description "Executes JavaScript"
	___run__
	// 1. Remove a configuração padrão do navegador móvel
	var oldMeta = document.querySelector('meta[name="viewport"]');
	if (oldMeta) oldMeta.remove();
	
	// 2. Engana o tablet: Força a página a ter exatamente 1280 pixels
	var meta = document.createElement('meta');
	meta.name = 'viewport';
	meta.content = 'width=1280, user-scalable=no';
	document.head.appendChild(meta);
	
	// 3. A Mágica da Elegância: Recria as tarjas pretas no fundo e centraliza
	var estilo = document.createElement('style');
	estilo.innerHTML = `
	    html { 
	        background-color: black !important; 
	        height: 100vh !important; /* Aqui estava 100%. O 100vh garante que ele recalcule o centro ao entrar em tela cheia */
	        width: 100vw !important;
	        display: flex;
	        align-items: center;
	        justify-content: center;
	        margin: 0;
	        padding: 0;
	    }
	    body {
	        background-color: white !important; 
	        width: 1280px !important;
	        height: 720px !important;
	        margin: 0 !important;
	        position: relative !important;
	        overflow: hidden !important;
	        flex-shrink: 0 !important; /* Impede que o navegador esmague a tela branca */
	    }
	`;
	document.head.appendChild(estilo);
	
	// 4. O Gatilho do Full Screen
	function ativarFullScreen() {
	    var elem = document.documentElement;
	    // Verifica se já não está em tela cheia
	    if (!document.fullscreenElement && !document.webkitFullscreenElement) {
	        if (elem.requestFullscreen) {
	            elem.requestFullscreen();
	        } else if (elem.webkitRequestFullscreen) { /* Fallback para tablets antigos */
	            elem.webkitRequestFullscreen();
	        }
	    }
	    // Remove os gatilhos após o primeiro toque para economizar processamento
	    document.removeEventListener('click', ativarFullScreen);
	    document.removeEventListener('touchstart', ativarFullScreen);
	}
	
	// O navegador fica "escutando" o primeiro toque do paciente na tela
	document.addEventListener('click', ativarFullScreen);
	document.addEventListener('touchstart', ativarFullScreen);
	__end__
	set _prepare ""

define inline_javascript custom_identification_page_inline_javascript
	set description "Executes JavaScript"
	___run__
	// 1. Cria o contêiner principal ocupando 100% da janela (Manta de Fundo)
	var fullScreenOverlay = document.createElement('div');
	fullScreenOverlay.id = 'custom-ident-overlay';
	fullScreenOverlay.style.position = 'fixed';
	fullScreenOverlay.style.top = '0';
	fullScreenOverlay.style.left = '0';
	fullScreenOverlay.style.width = '100vw';
	fullScreenOverlay.style.height = '100vh';
	fullScreenOverlay.style.backgroundColor = '#000000'; // Fundo preto puro bloqueia qualquer vazamento visual
	fullScreenOverlay.style.zIndex = '99999';
	
	// 2. Cria a caixa do formulário (AUMENTADA)
	var formWrapper = document.createElement('div');
	formWrapper.style.position = 'absolute';
	formWrapper.style.top = '50%';
	formWrapper.style.left = '50%';
	formWrapper.style.transform = 'translate(-50%, -50%)';
	formWrapper.style.textAlign = 'center';
	formWrapper.style.fontFamily = 'Helvetica, Arial, sans-serif';
	formWrapper.style.backgroundColor = '#1a1a1a'; // Caixa escura clínica
	formWrapper.style.padding = '50px 45px'; // Aumentado o espaçamento interno
	formWrapper.style.borderRadius = '14px';
	formWrapper.style.boxShadow = '0 12px 30px rgba(0,0,0,0.8)';
	formWrapper.style.width = '460px'; // Aumentado de 380px para 460px
	
	// 3. Cabeçalho
	var header = document.createElement('h2');
	header.innerText = 'Identificação';
	header.style.color = '#ffffff';
	header.style.margin = '0 0 15px 0';
	header.style.fontSize = '26px';
	formWrapper.appendChild(header);
	
	// 4. Instruções (Texto ajustado para o Protocolo)
	var instructions = document.createElement('p');
	instructions.innerText = 'Por favor, preencha o formulário com seu nome completo antes de iniciar o protocolo:';
	instructions.style.color = '#aaaaaa';
	instructions.style.margin = '0 0 30px 0';
	instructions.style.fontSize = '16px';
	instructions.style.lineHeight = '1.5';
	formWrapper.appendChild(instructions);
	
	// 5. Caixa de digitação do nome (Input Text - AUMENTADA)
	var nameInput = document.createElement('input');
	nameInput.type = 'text';
	nameInput.style.padding = '15px 20px'; // Caixa mais alta e confortável para digitar
	nameInput.style.width = '100%';
	nameInput.style.boxSizing = 'border-box';
	nameInput.style.fontSize = '18px'; // Fonte maior para facilitar a leitura do participante
	nameInput.style.border = '2px solid #333333';
	nameInput.style.borderRadius = '8px';
	nameInput.style.backgroundColor = '#2b2b2b';
	nameInput.style.color = '#ffffff';
	nameInput.style.outline = 'none';
	nameInput.style.marginBottom = '30px';
	nameInput.style.textAlign = 'center';
	formWrapper.appendChild(nameInput);
	
	// Efeitos visuais de foco na caixa de texto
	nameInput.onfocus = function() { nameInput.style.border = '2px solid #4CAF50'; };
	nameInput.onblur = function() { nameInput.style.border = '2px solid #333333'; };
	
	// 6. O Botão Físico "Avançar"
	var submitButton = document.createElement('button');
	submitButton.type = 'button';
	submitButton.innerText = 'Avançar';
	submitButton.style.padding = '14px 0';
	submitButton.style.width = '100%';
	submitButton.style.fontSize = '18px';
	submitButton.style.backgroundColor = '#4CAF50';
	submitButton.style.color = '#ffffff';
	submitButton.style.border = 'none';
	submitButton.style.borderRadius = '8px';
	submitButton.style.cursor = 'pointer';
	submitButton.style.fontWeight = 'bold';
	formWrapper.appendChild(submitButton);
	
	// Monta a estrutura na página web
	fullScreenOverlay.appendChild(formWrapper);
	document.body.appendChild(fullScreenOverlay);
	
	// Foca o cursor automaticamente na caixa de texto
	setTimeout(function() {
	    nameInput.focus();
	}, 150);
	
	// 7. Ação do clique do mouse no botão
	submitButton.onclick = function(e) {
	    if (e) e.preventDefault();
	    
	    var cleanName = nameInput.value.trim();
	    
	    if (cleanName === "") {
	        vars.subject_name = "Participante_Anonimo";
	    } else {
	        vars.subject_name = cleanName;
	    }
	    
	    // Remove toda a manta e o formulário da tela de uma vez só
	    var elementToRemove = document.getElementById('custom-ident-overlay');
	    if (elementToRemove) {
	        document.body.removeChild(elementToRemove);
	    }
	    
	    // Avança o experimento mantendo o canvas do OSWeb intacto nos bastidores
	    if (typeof runner !== 'undefined' && runner.resume) {
	        runner.resume();
	    } else if (typeof osweb !== 'undefined' && osweb.runner && osweb.runner.resume) {
	        osweb.runner.resume();
	    }
	};
	__end__
	set _prepare ""

define inline_javascript jitter_task_js
	set description "Executes JavaScript"
	set _run ""
	___prepare__
	// Gera um intervalo temporal aleatório entre 800ms e 1500ms
	vars.jitter = Math.floor(Math.random() * (1500 - 800 + 1)) + 800;
	__end__

define inline_javascript jitter_training_js
	set description "Executes JavaScript"
	set _run ""
	___prepare__
	// Gera um intervalo temporal aleatório entre 800ms e 1500ms
	vars.jitter = Math.floor(Math.random() * (1500 - 800 + 1)) + 800;
	__end__

define sketchpad mask_task_sketchpad
	set duration "[jitter]"
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=no font_family=mono font_italic=no font_size=100 html=yes show_if=True text="+" x=0 y=0 z_index=0

define sketchpad mask_training_sketchpad
	set duration "[jitter]"
	set description "Displays stimuli"
	draw textline center=1 color="#000000" font_bold=yes font_family=mono font_italic=no font_size=90 html=yes show_if=True text="+" x=0 y=0 z_index=0

define inline_javascript reset_javascript
	set description "Executes JavaScript"
	set _run ""
	___prepare__
	// Altere para control para testar a fase Go
	vars.condition = "control";
	__end__

define sketchpad response_window_task_sketchpad
	set duration 900
	set description "Displays stimuli"

define sketchpad response_window_training_sketchpad
	set duration 900
	set description "Displays stimuli"

define inline_javascript sart_response_finalize_task_js
	set description "Executes JavaScript"
	___run__
	(function () {
	    var TOTAL_RESPONSE_WINDOW_MS = 1150;
	    var MIN_VALID_RT_MS = 100;
	
	    var cap = window.sartCapture;
	    var clicked = cap && cap.state && cap.state.clickTime !== null;
	
	    if (cap && cap.handler) {
	        document.removeEventListener('pointerdown', cap.handler, true);
	        document.removeEventListener('mousedown', cap.handler, true);
	        document.removeEventListener('touchstart', cap.handler, true);
	    }
	
	    var stimOnset = Number(vars.sart_listener_start);
	    vars.sart_stim_onset = stimOnset;
	    vars.sart_osweb_sketchpad_time = Number(vars.time_Trial_sequence_Task_sketchpad);
	    vars.sart_clock_offset = stimOnset - vars.sart_osweb_sketchpad_time;
	
	    if (clicked) {
	        var rt = Math.round(cap.state.clickTime - stimOnset);
	
	        if (!isFinite(rt)) {
	            rt = null;
	        }
	
	        vars.response = 1;
	        vars.response_time = rt === null ? null : Math.max(0, rt);
	        vars.cursor_x = cap.state.x;
	        vars.cursor_y = cap.state.y;
	    } else {
	        vars.response = null;
	        vars.response_time = TOTAL_RESPONSE_WINDOW_MS;
	        vars.cursor_x = null;
	        vars.cursor_y = null;
	    }
	
	    vars.is_artifact = clicked && vars.response_time < MIN_VALID_RT_MS ? 1 : 0;
	
	    if (vars.condition === 'nogo') {
	        vars.correct = clicked ? 0 : 1;
	    } else if (vars.condition === 'go') {
	        vars.correct = clicked ? 1 : 0;
	    } else {
	        vars.correct = 0;
	    }
	
	    if (vars.is_artifact === 1) {
	        vars.correct = 0;
	    }
	
	    window.sartCapture = null;
	})();
	__end__
	set _prepare ""

define inline_javascript sart_response_finalize_training_js
	set description "Executes JavaScript"
	___run__
	(function () {
	    var TOTAL_RESPONSE_WINDOW_MS = 1150;
	    var MIN_VALID_RT_MS = 100;
	
	    var cap = window.sartCapture;
	    var clicked = cap && cap.state && cap.state.clickTime !== null;
	
	    if (cap && cap.handler) {
	        document.removeEventListener('pointerdown', cap.handler, true);
	        document.removeEventListener('mousedown', cap.handler, true);
	        document.removeEventListener('touchstart', cap.handler, true);
	    }
	
	    var stimOnset = Number(vars.sart_listener_start);
	    vars.sart_stim_onset = stimOnset;
	    vars.sart_osweb_sketchpad_time = Number(vars.time_Trial_sequence_training_sketchpad);
	    vars.sart_clock_offset = stimOnset - vars.sart_osweb_sketchpad_time;
	
	    if (clicked) {
	        var rt = Math.round(cap.state.clickTime - stimOnset);
	
	        if (!isFinite(rt)) {
	            rt = null;
	        }
	
	        vars.response = 1;
	        vars.response_time = rt === null ? null : Math.max(0, rt);
	        vars.cursor_x = cap.state.x;
	        vars.cursor_y = cap.state.y;
	    } else {
	        vars.response = null;
	        vars.response_time = TOTAL_RESPONSE_WINDOW_MS;
	        vars.cursor_x = null;
	        vars.cursor_y = null;
	    }
	
	    vars.is_artifact = clicked && vars.response_time < MIN_VALID_RT_MS ? 1 : 0;
	
	    if (vars.condition === 'nogo') {
	        vars.correct = clicked ? 0 : 1;
	    } else if (vars.condition === 'go') {
	        vars.correct = clicked ? 1 : 0;
	    } else {
	        vars.correct = 0;
	    }
	
	    if (vars.is_artifact === 1) {
	        vars.correct = 0;
	    }
	
	    window.sartCapture = null;
	})();
	__end__
	set _prepare ""

define inline_javascript sart_response_start_task_js
	set description "Executes JavaScript"
	___run__
	(function () {
	    if (window.sartCapture && window.sartCapture.handler) {
	        document.removeEventListener('pointerdown', window.sartCapture.handler, true);
	        document.removeEventListener('mousedown', window.sartCapture.handler, true);
	        document.removeEventListener('touchstart', window.sartCapture.handler, true);
	    }
	
	    vars.response = null;
	    vars.response_time = null;
	    vars.correct = 0;
	    vars.is_artifact = 0;
	
	    vars.sart_response_source = 'js_listener';
	    vars.sart_listener_start = performance.now();
	    vars.sart_click_time = null;
	    vars.sart_click_x = null;
	    vars.sart_click_y = null;
	
	    var state = {
	        clickTime: null,
	        x: null,
	        y: null
	    };
	
	    var handler = function (event) {
	        if (state.clickTime !== null) {
	            return;
	        }
	
	        if (typeof event.button === 'number' && event.button !== 0) {
	            return;
	        }
	
	        state.clickTime = performance.now();
	        state.x = event.clientX !== undefined ? event.clientX : null;
	        state.y = event.clientY !== undefined ? event.clientY : null;
	
	        vars.sart_click_time = state.clickTime;
	        vars.sart_click_x = state.x;
	        vars.sart_click_y = state.y;
	    };
	
	    window.sartCapture = {
	        state: state,
	        handler: handler
	    };
	
	    document.addEventListener('pointerdown', handler, true);
	    document.addEventListener('mousedown', handler, true);
	    document.addEventListener('touchstart', handler, true);
	})();
	__end__
	set _prepare ""

define inline_javascript sart_response_start_training_js
	set description "Executes JavaScript"
	___run__
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	__end__
	set _prepare ""

define sequence task
	set flush_keyboard yes
	set description "Runs a number of items in sequence"
	run config_viewport_inline_javascript True
	run custom_identification_page_inline_javascript True
	run reset_javascript True
	run Instructions always
	run Training_Loop always
	run End_of_Training always
	run Task_Loop_with_Pause always

